<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindBehaviorPirouetteDataSchema.Rig;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:AindBehaviorPirouetteDataSchema.Session;assembly=Extensions"
                 xmlns:p3="clr-namespace:AindBehaviorPirouetteDataSchema.TaskLogic;assembly=Extensions"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath />
        <RigPath />
        <SessionPath />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorPirouetteRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p2:DeserializeFromJson">
              <p2:Type xsi:type="TypeMapping" TypeArguments="p2:AindBehaviorSessionModel" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p3:DeserializeFromJson">
              <p3:Type xsi:type="TypeMapping" TypeArguments="p3:AindBehaviorPirouetteTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Onix.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Commutator.bonsai">
              <PortName />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>HarpDevices</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpOutputExpander</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpOutputExpander.bonsai">
                    <PortName />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpWhiteRabbit</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpWhiteRabbit.bonsai">
                    <PortName>COMx</PortName>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Camera</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\CameraController.bonsai" />
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\Cameras.bonsai" />
                </Nodes>
                <Edges />
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Magnetometer.bonsai" />
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Logging</Name>
        <Workflow>
          <Nodes />
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>AccumulatedCommutatorTurns</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>AccumulatedMagnetTurns</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CommutatorTurns</Name>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:IndexSelector>Timestamp.Second</viz:IndexSelector>
        <viz:ValueSelector>Value.Item1,Value.Item2,Value.Item3</viz:ValueSelector>
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity xsi:nil="true" />
        <viz:Min xsi:nil="true" />
        <viz:Max xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="5" To="9" Label="Source1" />
      <Edge From="6" To="9" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source3" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>